---
API: 2.1
OpenSesame: 3.2.8
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Word Spotting"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 32
set font_italic no
set font_family mono
set font_bold no
set experiment_path "c:\\Program Files (x86)\\OpenSesame\\share\\opensesame_resources\\templates"
set disable_garbage_collection yes
set description "A template containing a practice and an experimental phase"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi yes
set background black

define notepad about_this_template
	__note__
	This template already contains the basic structure of a typical experiment.
	It consists of a practice phase, followed by an experimental phase. For more
	information, please visit <http://osdoc.cogsci.nl/>
	Have fun with OpenSesame!
	__end__
	set description "Some pointers to help you gest started!"

define loop block_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run trial_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run block_loop always

define sketchpad end_of_experiment
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to exit" x=0 y=0 z_index=0

define sketchpad end_of_practice
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the practice phase is finished"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run about_this_template always
	run instructions always
	run experimental_loop always
	run end_of_experiment always

define loop experimental_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run block_sequence

define feedback feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Your average response time was [avg_rt]ms<br /><br />Your accuracy was [acc]%<br /><br />Press any key to continue" x=0 y=0 z_index=0

define sketchpad instructions
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to begin!" x=0 y=0 z_index=0

define keyboard_response keyboard_response
	set timeout 4000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define advanced_delay new_advanced_delay
	set jitter_mode Uniform
	set jitter 0
	set duration 5000
	set description "Waits for a specified duration"

define sampler new_sampler
	set volume 1
	set stop_after 0
	set sample "aamaxflowshaxl.wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_sketchpad always
	run new_sound_start_recording always
	run new_advanced_delay always
	run new_sound_stop_recording always

define sketchpad new_sketchpad
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="What word did you just hear?" x=32.0 y=0.0 z_index=0

define sound_start_recording new_sound_start_recording

define sound_stop_recording new_sound_stop_recording

define loop practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run block_sequence

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sketchpad sketchpad
	set start_response_interval no
	set duration 0
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run new_sampler always
	run sketchpad always
	run keyboard_response always
	run new_sequence "[response_keyboard_response] = 'space'"
	run logger always

